PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = GLYPH_KE1
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine color_box
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    PolygonComponent polygon_2
      fillColor [set every repeat] = $color
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 2.0
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    PolygonComponent polygon_3
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','r','g','b'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 2.0
      store = first key
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  Routine Normal_English
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    PolygonComponent polygon_4
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.5
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    TextComponent text_9
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp_6
      allowedKeys = 'y','r','g','b'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 2.0
      store = first key
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  Routine Psudo_Japanese
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    PolygonComponent polygon_5
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.5
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    TextComponent text_11
      color [set every repeat] = $color
      font = Electroharmonix
      letterHeight = 0.1
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp_8
      allowedKeys = 'y','r','g','b'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 2.0
      store = first key
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    PolygonComponent polygon_6
      disabled = True
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.5
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  Routine closing
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    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The task is now completed.
        Thank you for your participation.
        Please inform the researcher that you have finished.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.5
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    TextComponent text_6
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 1.5
      text [set every repeat] = $word
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = correct_a
      forceEndRoutine = True
      startVal [time (s)] = 1.5
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  Routine title1
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    TextComponent title_1
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 7.0
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      text:
        Session 1
        Please respond the color of squares.

        Press space when you are ready.
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      text = Practice is complete. Three sessions of actual experiment will now begin.
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 7.0
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  Routine intro2
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Your task is to respond to the COLOR OF THE SHAPES & WORDS.

        For example, if the word “BLUE” appears in red font, you should respond as “RED.”
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.047
      pos = (0, -6)
      startVal [time (s)] = 0.0
      text = (Please press space to go to the next page.)
      units = cm
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  Routine intro3
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    TextComponent text3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        When the color of the word is RED, please press ”r”
        When the color of the word is BLUE, please press ”b”
        When the color of the word is GREEN, please press ”g”
        When the color of the word is YELLOW, please press ”y”

        Please keep your fingers resting on these keys.
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.047
      pos = (0, -6)
      startVal [time (s)] = 0.0
      text = (Please press space to go to the next page.)
      units = cm
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  Routine intro4
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    TextComponent text4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now complete a short practice session. In the practice session, you will go to the next word once you respond the correct answer.

        Please respond as accurately and as quickly as possible.
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.047
      pos = (0, -6)
      startVal [time (s)] = 0.0
      text = (Please press space to go to the next page.)
      units = cm
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  Routine intro5
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    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press space when you are ready.
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    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_14
      letterHeight = 0.047
      pos = (0, -6)
      startVal [time (s)] = 0.0
      text = (Please press space to go to the next page.)
      units = cm
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  Routine intro1
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    TextComponent text_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome and thank you for participating.

        In this study, you are going to see geometrical shapes and words displayed in colored font.
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.047
      pos = (0, -6)
      startVal [time (s)] = 0.0
      text = (Please press space to go to the next page.)
      units = cm
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  Routine Japanese
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    PolygonComponent polygon_7
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.5
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    TextComponent text_15
      color [set every frame] = $color
      letterHeight = 0.1
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'y','r','g','b'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 2.0
      store = first key
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  Routine title_4
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    TextComponent text_16
      letterHeight = 0.05
      startVal [time (s)] = 0.8
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      text:
        Session 4
        Please respond the color of words.

        Press space when you are ready.
    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.8
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  Routine title3
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.8
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      text:
        Session 3
        Please respond the color of words.

        Press space when you are ready.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.8
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  Routine title2
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.8
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      text:
        Session 2
        Please respond the color of words.

        Press space when you are ready.
    KeyboardComponent key_resp_5
      allowedKeys = 'y','r','b','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.8
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  Routine title
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    TextComponent text_17
      letterHeight = 0.05
      startVal [time (s)] = 0.8
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      text:
        Session 1
        Please respond the color of squares.

        Press space when you are ready.
    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.8
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Flow
  Routine intro1
  Routine intro2
  Routine intro3
  Routine intro4
  Routine intro5
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Stimuli_Trial.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'RED', 'color': 'blue', 'stim_condition': 'i', 'correct_a': 'b'},
      {'word': 'RED', 'color': 'yellow', 'stim_condition': 'i', 'correct_a': 'y'},
      {'word': 'BLUE', 'color': 'green', 'stim_condition': 'i', 'correct_a': 'g'},
      {'word': 'GREEN', 'color': 'red', 'stim_condition': 'i', 'correct_a': 'r'},
      {'word': 'GREEN', 'color': 'yellow', 'stim_condition': 'i', 'correct_a': 'y'},
      {'word': 'YELLOW', 'color': 'blue', 'stim_condition': 'i', 'correct_a': 'b'},
      {'word': 'RED', 'color': 'red', 'stim_condition': 'c', 'correct_a': 'r'},
      {'word': 'GREEN', 'color': 'green', 'stim_condition': 'c', 'correct_a': 'g'}]
    Routine trial
  LoopTerminator trials
  Routine title1
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = /Users/lulu/Desktop/★Project_NEVER ERASE/GLYPH/Stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'RED', 'color': 'blue', 'stim_condition': 'i', 'correct_a': 'b', 't_word': 'BLUE', 't_color': 'green', 't_stim_condition': 'i', 't_correct_a': 'g'},
      {'word': 'RED', 'color': 'green', 'stim_condition': 'i', 'correct_a': 'g', 't_word': 'RED', 't_color': 'yellow', 't_stim_condition': 'i', 't_correct_a': 'y'},
      {'word': 'RED', 'color': 'yellow', 'stim_condition': 'i', 'correct_a': 'y', 't_word': 'RED', 't_color': 'red', 't_stim_condition': 'c', 't_correct_a': 'r'},
      {'word': 'BLUE', 'color': 'red', 'stim_condition': 'i', 'correct_a': 'r', 't_word': 'YELLOW', 't_color': 'blue', 't_stim_condition': 'i', 't_correct_a': 'b'},
      {'word': 'BLUE', 'color': 'green', 'stim_condition': 'i', 'correct_a': 'g', 't_word': 'GREEN', 't_color': 'blue', 't_stim_condition': 'i', 't_correct_a': 'b'},
      {'word': 'BLUE', 'color': 'green', 'stim_condition': 'i', 'correct_a': 'g', 't_word': 'BLUE', 't_color': 'green', 't_stim_condition': 'i', 't_correct_a': 'g'},
      {'word': 'GREEN', 'color': 'red', 'stim_condition': 'i', 'correct_a': 'r', 't_word': 'BLUE', 't_color': 'blue', 't_stim_condition': 'c', 't_correct_a': 'b'},
      {'word': 'GREEN', 'color': 'blue', 'stim_condition': 'i', 'correct_a': 'b', 't_word': 'YELLOW', 't_color': 'yellow', 't_stim_condition': 'c', 't_correct_a': 'y'},
      {'word': 'GREEN', 'color': 'yellow', 'stim_condition': 'i', 'correct_a': 'y', 't_word': 'RED', 't_color': 'yellow', 't_stim_condition': 'i', 't_correct_a': 'y'}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
    Routine title
    Routine color_box
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = /Users/lulu/Desktop/★Project_NEVER ERASE/GLYPH/Stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'RED', 'color': 'blue', 'stim_condition': 'i', 'correct_a': 'b', 't_word': 'BLUE', 't_color': 'green', 't_stim_condition': 'i', 't_correct_a': 'g'},
      {'word': 'RED', 'color': 'green', 'stim_condition': 'i', 'correct_a': 'g', 't_word': 'RED', 't_color': 'yellow', 't_stim_condition': 'i', 't_correct_a': 'y'},
      {'word': 'RED', 'color': 'yellow', 'stim_condition': 'i', 'correct_a': 'y', 't_word': 'RED', 't_color': 'red', 't_stim_condition': 'c', 't_correct_a': 'r'},
      {'word': 'BLUE', 'color': 'red', 'stim_condition': 'i', 'correct_a': 'r', 't_word': 'YELLOW', 't_color': 'blue', 't_stim_condition': 'i', 't_correct_a': 'b'},
      {'word': 'BLUE', 'color': 'green', 'stim_condition': 'i', 'correct_a': 'g', 't_word': 'GREEN', 't_color': 'blue', 't_stim_condition': 'i', 't_correct_a': 'b'},
      {'word': 'BLUE', 'color': 'green', 'stim_condition': 'i', 'correct_a': 'g', 't_word': 'BLUE', 't_color': 'green', 't_stim_condition': 'i', 't_correct_a': 'g'},
      {'word': 'GREEN', 'color': 'red', 'stim_condition': 'i', 'correct_a': 'r', 't_word': 'BLUE', 't_color': 'blue', 't_stim_condition': 'c', 't_correct_a': 'b'},
      {'word': 'GREEN', 'color': 'blue', 'stim_condition': 'i', 'correct_a': 'b', 't_word': 'YELLOW', 't_color': 'yellow', 't_stim_condition': 'c', 't_correct_a': 'y'},
      {'word': 'GREEN', 'color': 'yellow', 'stim_condition': 'i', 'correct_a': 'y', 't_word': 'RED', 't_color': 'yellow', 't_stim_condition': 'i', 't_correct_a': 'y'}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
    Routine title2
    Routine Normal_English
  LoopTerminator trials_3
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = /Users/lulu/Desktop/★Project_NEVER ERASE/GLYPH/Stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine title3
    Routine Psudo_Japanese
  LoopTerminator trials_4
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = Stimuli_Japanese.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'レッド', 'color': 'blue', 'stim_condition': 'i', 'correct_a': 'b'},
      {'word': 'レッド', 'color': 'green', 'stim_condition': 'i', 'correct_a': 'g'},
      {'word': 'レッド', 'color': 'yellow', 'stim_condition': 'i', 'correct_a': 'y'},
      {'word': 'ブルー', 'color': 'red', 'stim_condition': 'i', 'correct_a': 'r'},
      {'word': 'ブルー', 'color': 'green', 'stim_condition': 'i', 'correct_a': 'g'},
      {'word': 'ブルー', 'color': 'green', 'stim_condition': 'i', 'correct_a': 'g'},
      {'word': 'グリーン', 'color': 'red', 'stim_condition': 'i', 'correct_a': 'r'},
      {'word': 'グリーン', 'color': 'blue', 'stim_condition': 'i', 'correct_a': 'b'},
      {'word': 'グリーン', 'color': 'yellow', 'stim_condition': 'i', 'correct_a': 'y'},
      {'word': 'イエロー', 'color': 'red', 'stim_condition': 'i', 'correct_a': 'r'},
      {'word': 'イエロー', 'color': 'blue', 'stim_condition': 'i', 'correct_a': 'b'},
      {'word': 'イエロー', 'color': 'green', 'stim_condition': 'i', 'correct_a': 'g'},
      {'word': 'レッド', 'color': 'red', 'stim_condition': 'c', 'correct_a': 'r'},
      {'word': 'ブルー', 'color': 'blue', 'stim_condition': 'c', 'correct_a': 'b'},
      {'word': 'グリーン', 'color': 'green', 'stim_condition': 'c', 'correct_a': 'g'},
      {'word': 'イエロー', 'color': 'yellow', 'stim_condition': 'c', 'correct_a': 'y'},
      {'word': 'レッド', 'color': 'red', 'stim_condition': 'c', 'correct_a': 'r'},
      {'word': 'ブルー', 'color': 'blue', 'stim_condition': 'c', 'correct_a': 'b'},
      {'word': 'グリーン', 'color': 'green', 'stim_condition': 'c', 'correct_a': 'g'},
      {'word': 'イエロー', 'color': 'yellow', 'stim_condition': 'c', 'correct_a': 'y'}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
    Routine title_4
    Routine Japanese
  LoopTerminator trials_5
  Routine closing
