PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Stroop Hiraikana
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Start
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    TextComponent WelcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1000000
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      text:
        Hello Welcome to the Experiment

        Please Press ‘space’ to continue!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Stroop_Task
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    TextComponent Variable
      color [set every frame] = $color
      font [set every frame] = $font
      letterHeight = 0.10
      startVal [condition] = $condition=='word'
      stopVal [duration (s)] = 1.0
      text [set every frame] = $word
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    PolygonComponent polygon
      fillColor [set every frame] = $color
      lineColor [set every frame] = $color
      shape = rectangle
      size = (0.30, 0.05)
      startVal [condition] = $condition=='shape'
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'b','y','g','r'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
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  Routine Blank
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  Routine fixation
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    TextComponent cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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Flow
  Routine Start
  Routine fixation
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Downloads/Surely v1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'condition': 'word', 'word': 'red', 'color': 'red', 'font': 'Arial'},
      {'condition': 'word', 'word': 'blue', 'color': 'blue', 'font': 'Arial'},
      {'condition': 'word', 'word': 'green', 'color': 'green', 'font': 'Arial'},
      {'condition': 'word', 'word': 'yellow', 'color': 'yellow', 'font': 'Arial'},
      {'condition': 'word', 'word': 'red', 'color': 'yellow', 'font': 'Arial'},
      {'condition': 'word', 'word': 'blue', 'color': 'red', 'font': 'Arial'},
      {'condition': 'word', 'word': 'green', 'color': 'blue', 'font': 'Arial'},
      {'condition': 'word', 'word': 'yellow', 'color': 'green', 'font': 'Arial'},
      {'condition': 'word', 'word': 'red', 'color': 'red', 'font': 'Hiraikana'},
      {'condition': 'word', 'word': 'blue', 'color': 'blue', 'font': 'Hiraikana'},
      {'condition': 'word', 'word': 'green', 'color': 'green', 'font': 'Hiraikana'},
      {'condition': 'word', 'word': 'yellow', 'color': 'yellow', 'font': 'Hiraikana'},
      {'condition': 'word', 'word': 'red', 'color': 'yellow', 'font': 'Hiraikana'},
      {'condition': 'word', 'word': 'blue', 'color': 'red', 'font': 'Hiraikana'},
      {'condition': 'word', 'word': 'green', 'color': 'blue', 'font': 'Hiraikana'},
      {'condition': 'word', 'word': 'yellow', 'color': 'green', 'font': 'Hiraikana'},
      {'condition': 'shape', 'word': 'square', 'color': 'red', 'font': None},
      {'condition': 'shape', 'word': 'square', 'color': 'blue', 'font': None},
      {'condition': 'shape', 'word': 'square', 'color': 'green', 'font': None},
      {'condition': 'shape', 'word': 'square', 'color': 'yellow', 'font': None}]
    Routine fixation
    Routine Stroop_Task
  LoopTerminator trials
  Routine End
